# ------------------------------- PCL Part ------------------------------


array<int> sequence[0];
loop
    int i = 2
until
    i > 6
begin
	loop
    int j = 1
	until
		 j > 15
	begin
		sequence.add( i );
		j = j + 1;
	end;
	
	i = i + 1;
end;
	
loop
    int i = 1
until
    i > 7
begin
	loop
    int j = 1
	until
		 j > 20
	begin
		sequence.add( i );
		j = j + 1;
	end;
	i = i + 6;
end;



loop
	int round = 1;
until
	round > 2
begin

	sequence.shuffle();
	loop
		 int i = 1
	until
		 i > sequence.count()
	begin
		
		play_ITI_trial( random( ONE_SEC, TWO_SEC ) );	
		play_test_trial( int(sequence[i]) );

		i = i  + 1;
	end;
	
	if(round == 1) then
		loop
		 int ctr = 120;
		until
			 ctr < 0
		begin
			 count_down_caption_3.set_caption( string( ctr ), true );
			 count_down_trial.present();
			 
			 ctr = ctr - 1;
		end;
		resume_trial.present();
	end;	
	round = round + 1;
	play_ITI_trial( ONE_SEC ); #Just a short blank screen between blocks
end;



